PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Name of Experiment
  keyboardBackend = ioHub
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Routines
  Routine LSL
    CodeComponent LSLcode
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo(name='Triggerstream',type = 'Markers',channel_count=1, channel_format='int32', source_id='Example')

        outlet = StreamOutlet(info)
  Routine Prompt_Prime
    KeyboardComponent Prompt1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent Prompt1text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Dear Participant,

        Welcome to our study: Your Brain on Food.

        During the task, you will see a series of food related images, followed by a rating slider.

        We are now preparing your task and calibrating the fNIRS equipment. While we do so, you will see some motivational images.

        You will press to start the calibration but after that, you don't need to click any buttons. A fixation cross will sometimes appear at the center of the screen. Both this text, the images and the cross will automatically disappear. You don't have to click on the screen unless told to.

        Please keep your head still and keep your gaze on the cross. The fNIRS device might de-calibrate if you don't do so.
  Routine StartPrime
    TextComponent StartPrimeRun
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press ‘space’ to start the calibration
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    KeyboardComponent StartPrimeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent StartPrimeTrig
      Code Type = Auto->JS
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      Begin Experiment:
        outlet.push_sample(x=[1])
  Routine PrimeImage
    ImageComponent Prime
      image [set every repeat] = $idealfemale
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent PrimeTrig
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])
  Routine FixCross
    CodeComponent RestTrig
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[1])
    TextComponent plus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = +
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  Routine StartCondition
    CodeComponent StartCondTrig
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[1])
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press ‘space’ to start the experiment
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  Routine ConditionImage
    CodeComponent FoodStartTrig
      Code Type = Auto->JS
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      Begin Experiment:
        outlet.push_sample(x=[1])
    ImageComponent FoodImage
      image [set every repeat] = $foodpics
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Prompt_Condition
    TextComponent Prompt_Cond
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Great job! We are now ready to start.

        You will be asked to press start. You will then see another fixation cross followed by the first image.

        A slider will appear to rate desirability of the image you just saw. This will procede until the end of the experiment.

        Don't forget to keep your head still and keep your gaze on the cross. The fNIRS device might de-calibrate if you don't do so.

        Ready to start?
  Routine EndPrompt
    TextComponent EndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Uff! That was long.

        Great job! You are now done!

        Thank you so much for helping our experiment.

        Have a great rest of your day!
    CodeComponent EndTrigger
      Code Type = Auto->JS
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      Begin Experiment:
        outlet.push_sample(x=[1])
  Routine Rate
    SliderComponent slider
      fillColor = 0.2078, 0.5922, -0.5843
      forceEndRoutine = False
      granularity = 1
      labels = "Not at all", "Very much"
      letterHeight = 0.02
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent SliderText
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        How much would you like to have this item, right now?
    CodeComponent SliderTrig
      Code Type = Auto->JS
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      Begin Experiment:
        outlet.push_sample(x=[1])
    MouseComponent mouse
      clickable = continuebutton
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = slider.rating
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    ImageComponent continuebutton
      image = continuebutton.jpg
      pos = (0.45, -0.45)
      size = (0.3, 0.07)
      startVal [condition] = slider.rating
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  Routine Rate_Practice
    SliderComponent RatePractice
      fillColor = 0.2078, 0.5922, -0.5843
      forceEndRoutine = False
      granularity = 1
      labels = "Not at all", "Very Much"
      letterHeight = 0.02
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    MouseComponent mouse_2
      clickable = button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = RatePractice.rating
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    ImageComponent button
      image = continuebutton.jpg
      pos = (0.45, -0.45)
      size = (0.3, 0.07)
      startVal [condition] = RatePractice.rating
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    TextComponent RatePracticeText
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        Welcome to rate practice!

        In the experiment, you will see a slider like this one. After you've clicked on the slider, the continue button appears. Click on it when your choice is final, in order to carry on with the experiment.
Flow
  Routine Rate_Practice
  Routine LSL
  Routine Prompt_Prime
  Routine StartPrime
  LoopInitiator PrimeLoop loopType="TrialHandler"
    conditionsFile = imagelist.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'fitpics': 'fit1', 'naturepics': 'n1', 'foodpics': 'food1'},
      {'fitpics': 'fit2', 'naturepics': 'n2', 'foodpics': 'food2'},
      {'fitpics': 'fit3', 'naturepics': 'n3', 'foodpics': 'food3'},
      {'fitpics': 'fit4', 'naturepics': 'n4', 'foodpics': 'food4'}]
    Routine PrimeImage
    Routine FixCross
  LoopTerminator PrimeLoop
  Routine Prompt_Condition
  Routine StartCondition
  Routine FixCross
  LoopInitiator Food loopType="TrialHandler"
    conditionsFile = imagelist.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'fitpics': 'fit1', 'naturepics': 'n1', 'foodpics': 'food1'},
      {'fitpics': 'fit2', 'naturepics': 'n2', 'foodpics': 'food2'},
      {'fitpics': 'fit3', 'naturepics': 'n3', 'foodpics': 'food3'},
      {'fitpics': 'fit4', 'naturepics': 'n4', 'foodpics': 'food4'}]
    Routine ConditionImage
    Routine Rate
    Routine FixCross
  LoopTerminator Food
  Routine EndPrompt
